<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: MIMI Project"
      Description="Broadcasting tool tracking data through OpenIGTLink
Tracking two instruments.
The computer needs to be on the same local network as Aurora SCU unit. The instruments have to be plugged into the first two slots"
    />
    <Device
      Id="TrackerDevice" 
      Type="AuroraTracker"
      SerialPort="7"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Left" PortName="0" RomFile="D:\Users\Keiran\PlusApp-2.8.0.20191105-Win64\config\NdiToolDefinitions\LeftToolPivot.rom"/>
		<DataSource Type="Tool" Id="Right" PortName="1" RomFile="D:\Users\Keiran\PlusApp-2.8.0.20191105-Win64\config\NdiToolDefinitions\RightToolPivot.rom"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Left" />
		  <DataSource Id="Right" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    
  </DataCollection>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="LeftToTracker" />
		<Transform Name="RightToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
